PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = PsychoTest
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent img1
      image [set every repeat] = $Img1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent img2
      image [set every repeat] = $Img2
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      storeCorrect = True
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  Routine Feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine testInstructions
    TextComponent Instruct
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a "change blindness" experiment.

        You will see 2 images, one followed by another.
        You will see the first image for 5 secs, after that, the second image
        will appear.

        Press "left_arrow" if the image is the same.
        Press "right_arrow" if the image is different.


        Remember, this is only a test run, so you can get used to the images
        and the buttons!
        There might be some images sometimes with differences and sometimes with no differences, so be aware.
    KeyboardComponent ReadyKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine realInstructions
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This were some easy examples for you to catch on.

        Now the real test will begin.
        Remember:
        "left_arrow" if the image is the same.
        "right_arrow" if the image is different.

        After each answer, you will be asked to click in the "space_bar" to
        answer the following example-
    KeyboardComponent ready_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endInstruction
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        That´s all.

        Thank you for participating!
  Routine ready
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = Press space to continue.
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Flow
  Routine testInstructions
  LoopInitiator practice loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = changeDetectionTrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Img1': 'Images\\1_1.jpg', 'Img2': 'Images\\1_1.jpg', 'corrAns': 'left', 'Equal': 'yes'},
      {'Img1': 'Images\\1_1.jpg', 'Img2': 'Images\\1_2.jpg', 'corrAns': 'right', 'Equal': 'no'},
      {'Img1': 'Images\\2_1.jpg', 'Img2': 'Images\\2_2.jpg', 'corrAns': 'right', 'Equal': 'no'},
      {'Img1': 'Images\\2_1.jpg', 'Img2': 'Images\\2_1.jpg', 'corrAns': 'left', 'Equal': 'yes'},
      {'Img1': 'Images\\3_1.jpg', 'Img2': 'Images\\3_2.jpg', 'corrAns': 'right', 'Equal': 'no'},
      {'Img1': 'Images\\3_2.jpg', 'Img2': 'Images\\3_2.jpg', 'corrAns': 'left', 'Equal': 'yes'}]
    Routine trial
    Routine Feedback
  LoopTerminator practice
  Routine realInstructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 7:24
    conditionsFile = changeDetectionTrials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Img1': 'Images\\1_1.jpg', 'Img2': 'Images\\1_1.jpg', 'corrAns': 'left', 'Equal': 'yes'},
      {'Img1': 'Images\\1_1.jpg', 'Img2': 'Images\\1_2.jpg', 'corrAns': 'right', 'Equal': 'no'},
      {'Img1': 'Images\\2_1.jpg', 'Img2': 'Images\\2_2.jpg', 'corrAns': 'right', 'Equal': 'no'},
      {'Img1': 'Images\\2_1.jpg', 'Img2': 'Images\\2_1.jpg', 'corrAns': 'left', 'Equal': 'yes'},
      {'Img1': 'Images\\3_1.jpg', 'Img2': 'Images\\3_2.jpg', 'corrAns': 'right', 'Equal': 'no'},
      {'Img1': 'Images\\3_2.jpg', 'Img2': 'Images\\3_2.jpg', 'corrAns': 'left', 'Equal': 'yes'},
      {'Img1': 'Images\\4_1.jpg', 'Img2': 'Images\\4_2.jpg', 'corrAns': 'right', 'Equal': 'no'},
      {'Img1': 'Images\\5_1.jpg', 'Img2': 'Images\\5_1.jpg', 'corrAns': 'left', 'Equal': 'yes'},
      {'Img1': 'Images\\6_1.jpg', 'Img2': 'Images\\6_2.jpg', 'corrAns': 'right', 'Equal': 'no'},
      {'Img1': 'Images\\7_1.jpg', 'Img2': 'Images\\7_2.jpg', 'corrAns': 'right', 'Equal': 'no'},
      {'Img1': 'Images\\8_1.jpg', 'Img2': 'Images\\8_1.jpg', 'corrAns': 'left', 'Equal': 'yes'},
      {'Img1': 'Images\\9_1.jpg', 'Img2': 'Images\\9_2.jpg', 'corrAns': 'right', 'Equal': 'no'},
      {'Img1': 'Images\\5_1.jpg', 'Img2': 'Images\\5_2.jpg', 'corrAns': 'right', 'Equal': 'no'},
      {'Img1': 'Images\\10_1.jpg', 'Img2': 'Images\\10_2.jpg', 'corrAns': 'right', 'Equal': 'no'},
      {'Img1': 'Images\\11_1.jpg', 'Img2': 'Images\\11_1.jpg', 'corrAns': 'left ', 'Equal': 'yes'},
      {'Img1': 'Images\\8_1.jpg', 'Img2': 'Images\\8_2.jpg', 'corrAns': 'right ', 'Equal': 'no'}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
    Routine trial
    Routine ready
  LoopTerminator trials
  Routine endInstruction
